PsychoPy2experiment version="2024.1.4"
Settings
  Audio lib = ptb
  Data filename = u'data/%s_%s_%s' % (expInfo['姓名'], expName, expInfo['date'])
  Experiment info = {'姓名': '王小明', '電話': '0900-000-000', '電子郵件': 'YourMail@gmail.com'}
  Full-screen window = True
  Monitor = ExperimentMonitor
  Resources = ['stimuli/redesign/clear.png', 'stimuli/redesign/digitspan_background.png', 'stimuli/redesign/i1.png', 'stimuli/redesign/i2.png', 'stimuli/redesign/i3.png', 'stimuli/redesign/plain.png', 'spreadsheets/choose_digitSpan.xlsx', 'spreadsheets/conditions.xlsx', 'spreadsheets/eight.xlsx', 'spreadsheets/eleven.xlsx', 'spreadsheets/five.xlsx', 'spreadsheets/four.xlsx', 'spreadsheets/nine.xlsx', 'spreadsheets/seven.xlsx', 'spreadsheets/six.xlsx', 'spreadsheets/ten.xlsx', 'spreadsheets/three.xlsx', 'spreadsheets/twelve.xlsx', 'stimuli/backButtonImage.png', 'stimuli/continue_button.png', 'stimuli/nextButtonImage.png', 'stimuli/startButtonImage.png']
  Screen = 2
  Units = height
  Window size (pixels) = [1080, 1920]
  backgroundFit = fill
  color = 1.0000, 1.0000, 1.0000
  expName = Digit_Span
  exportHTML = on Save
  keyboardBackend = ioHub
  logging level = warning
  measureFrameRate = False
  runMode = 0
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Routines
  Routine Instruction2
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    CodeComponent code_5
      Code Type = Auto->JS
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      Begin Experiment:
        slideN = 1
        instruct_txt = '在這個實驗中，\n\n你需要嘗試記住螢幕上顯示的數字。\n\n所有數字都在0到9之間。\n\n你會看到一串數字，依序顯示\n\n請記住整串數字'

        maxSlideN = 2
        minSlideN = 1
      End Routine:
        if 'backButton_2' in mouse_3.clicked_name or key_resp_2.keys == 'left':
            slideN -= 1
        elif 'nextButton_2' in mouse_3.clicked_name or key_resp_2.keys == 'right':
            slideN += 1
        elif 'start_2' in mouse_3.clicked_name or key_resp_2.keys == 'space':
            Instruct_Loop.finished = True

        # Constrain slideN within the valid range
        if slideN < minSlideN:
            slideN = minSlideN
        elif slideN > maxSlideN:
            slideN = maxSlideN

        if slideN == 1:
            instruct_txt = '在這個實驗中，\n\n你需要嘗試記住螢幕上顯示的數字。\n\n所有數字都在0到9之間。\n\n你會看到一串數字，依序顯示\n\n請記住整串數字'
        elif slideN == 2:
            instruct_txt = '一旦你記住這些數字後，你需要重述它們。\n\n在方塊中輸入剛剛顯示過的數字\n\n (空白鍵清除輸入的內容) \n\n 完成後請按 送出答案'
    ImageComponent backimg_2
      image = stimuli/redesign/digitspan_background.png
      size = (1.775,1)
      startVal [time (s)] = 0.0
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    TextComponent i2_txt
      color = -0.6157, -0.6706, -0.0196
      font = Microsoft JhengHei
      letterHeight = 0.05
      pos = (0, 0.055)
      startVal [time (s)] = 0.0
      text [set every repeat] = $instruct_txt
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    TextComponent pgnum
      color = -0.6157, -0.6706, -0.0196
      letterHeight = 0.05
      pos = (0, -0.3)
      startVal [time (s)] = 0.0
      text [set every repeat] = $str(slideN) + '/' + str(maxSlideN)
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    KeyboardComponent key_resp_2
      allowedKeys = 'left','right','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    ImageComponent backButton_2
      image = stimuli/backButtonImage.png
      pos = (-0.25, -0.3)
      size = (0.185,0.06)
      startVal [time (s)] = 0.0
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    ImageComponent nextButton_2
      image = stimuli/nextButtonImage.png
      pos = (0.25, -0.3)
      size = (0.185,0.06)
      startVal [time (s)] = 0.0
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    ImageComponent start_2
      image = stimuli/startButtonImage.png
      pos = (0, -0.375)
      size = (0.185,0.06)
      startVal [time (s)] = 0.0
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    MouseComponent mouse_3
      clickable = backButton_2,nextButton_2,start_2
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      startVal [time (s)] = 0.0
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  Routine Digit_Presentation
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    ImageComponent backimg_3
      image = stimuli/redesign/digitspan_background.png
      size = (1.775,1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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    ImageComponent image
      image = stimuli/redesign/plain.png
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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    TextComponent Fixation
      letterHeight = 0.15
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = +
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    TextComponent pres_text
      color = -0.6078, -0.6706, -0.0118
      letterHeight = 0.15
      pos = (0, 0.005)
      startVal [time (s)] = 1.0
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $str(digits)[digitLoop.thisN]
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  Routine reset_correct
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    CodeComponent code_4
      Code Type = Auto->JS
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      Begin Routine:
        correct_at_this_level = 0
  Routine Feedback
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    ImageComponent backimg_5
      image = stimuli/redesign/digitspan_background.png
      size = (1.775,1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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    TextComponent feedback_txt
      color = -0.6157, -0.6706, -0.0196
      letterHeight = 0.10
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $fbTxt
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  Routine End
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    ImageComponent backimg_6
      image = stimuli/redesign/digitspan_background.png
      size = (1.775,1)
      startVal [time (s)] = 0.0
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    TextComponent Thank_you
      color = -0.6078, -0.6706, -0.0118
      letterHeight = 0.075
      startVal [time (s)] = 0.0
      text [set every repeat] = $'您能夠記住的數列共有 ' + str(last_level-1) + '個'
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    ImageComponent endImg
      image = stimuli/redesign/end_experiment.png
      pos = (0, -0.2)
      size = (0.315,0.074)
      startVal [time (s)] = 0.0
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    MouseComponent mouse_2
      clickable = endImg
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      startVal [time (s)] = 0.0
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    KeyboardComponent endKey
      allowedKeys = 'space','return','escape'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Response_image_
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    ImageComponent digit
      image = stimuli/redesign/digit1.png
      pos = (-0.2, 0.35)
      size = (0.1,0.1)
      startVal [time (s)] = 0.0
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    ImageComponent digit_2
      image = stimuli/redesign/digit2.png
      pos = (0, 0.35)
      size = (0.1,0.1)
      startVal [time (s)] = 0.0
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    ImageComponent digit_3
      image = stimuli/redesign/digit3.png
      pos = (0.2, 0.345)
      size = (0.1,0.1)
      startVal [time (s)] = 0.0
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    ImageComponent digit_4
      image = stimuli/redesign/digit4.png
      pos = (-0.2, 0.2)
      size = (0.1,0.1)
      startVal [time (s)] = 0.0
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    ImageComponent digit_5
      image = stimuli/redesign/digit5.png
      pos = (0, 0.2)
      startVal [time (s)] = 0.0
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    ImageComponent digit_6
      image = stimuli/redesign/digit6.png
      pos = (0.20, 0.2)
      startVal [time (s)] = 0.0
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    ImageComponent digit_7
      image = stimuli/redesign/digit7.png
      pos = (-0.2, 0.05)
      startVal [time (s)] = 0.0
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    ImageComponent digit_8
      image = stimuli/redesign/digit8.png
      pos = (0, 0.05)
      startVal [time (s)] = 0.0
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    ImageComponent digit_9
      image = stimuli/redesign/digit9.png
      pos = (0.2, 0.05)
      startVal [time (s)] = 0.0
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    ImageComponent digit_10
      image = stimuli/redesign/digit0.png
      pos = (0, -0.1)
      startVal [time (s)] = 0.0
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    CodeComponent code_2
      Code Type = Auto->JS
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      Begin Routine:
        numlist=['0','1','2','3','4','5','6','7','8','9']
  Routine Recall
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    CodeComponent fb_code
      Code Type = Auto->JS
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      Begin Routine:
        # Initialize variables
        entered_text = ''
        enter_pressed = False  # Flag to track if Enter was pressed
        # Reset the TextBox text
        textbox.setText('')
        # Clear the event buffer to avoid skipping the routine due to earlier key presses
        event.clearEvents()
      Each Frame:
        # Check for key presses
        keys = event.getKeys()
        if mouse.isPressedIn(clear_button):
            entered_text = ''
            textbox.setText(entered_text)
        elif mouse.isPressedIn(continue_button):
            continueRoutine = False
        for key in keys:
            if key in ['0', '1', '2', '3', '4', '5', '6', '7', '8', '9']:
                entered_text += key
                textbox.setText(entered_text)
            elif key == 'left':
                entered_text = entered_text[:-1]
                textbox.setText(entered_text)
            elif key == 'return' and not enter_pressed:
                # End the routine when Enter is pressed
                continueRoutine = False
                enter_pressed = True  # Set flag to True
            elif key == 'space':
                entered_text = ''
                textbox.setText(entered_text)
      End Routine:
        if textbox.text == str(digits):
            correct = 1

            # go to next level
            trials.finished = True
            fbTxt = '答對了!'
        else:
            correct = 0
            fbTxt = '答錯了!'
        thisExp.addData('correct', correct)

        correct_at_this_level += correct

        if trials.thisN+1 == trials.nTotal and correct_at_this_level != trials.nTotal:
            # end level and blocks
            last_level = level
            trials.finished = True
            blocks.finished = True
        thisExp.addData('Response', entered_text)
    ImageComponent backimg_4
      image = stimuli/redesign/digitspan_background.png
      size = (1.775,1)
      startVal [time (s)] = 0.0
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    TextComponent recall_txt
      color = -0.6157, -0.6706, -0.0196
      letterHeight = 0.05
      pos = (0, 0.25)
      startVal [time (s)] = 0.0
      text = 請試著回想剛剛出現的數字
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    TextboxComponent textbox
      bold = False
      borderColor = -1.0000, -1.0000, -1.0000
      color = -0.6078, -0.6706, -0.0118
      editable = False
      letterHeight = 0.15
      size = (1, 0.2)
      startVal [time (s)] = 0.0
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    ImageComponent continue_button
      image = stimuli/redesign/continue_button.png
      pos = (0.2, -0.2)
      size = (0.35,0.1)
      startVal [time (s)] = 0.0
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    ImageComponent clear_button
      image = stimuli/redesign/clear.png
      pos = (-0.2, -0.2)
      size = (0.35,0.1)
      startVal [time (s)] = 0.0
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    MouseComponent mouse
      clickable = continue_button,
      forceEndRoutineOnPress = never
      saveMouseState = on click
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp
      allowedKeys = '1','2','3','4','5','6','7','8','9','backspace','delete','return'
      forceEndRoutine = False
      startVal [time (s)] = 0.0
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  Routine intro
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    MovieComponent movie
      backend = ffpyplayer
      forceEndRoutine = False
      loop = True
      movie = stimuli/opening.mp4
      size = (1.789, 1)
      startVal [time (s)] = 0.0
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    KeyboardComponent EndIntroKey
      allowedKeys = 'left','right','space','return'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    MouseComponent mouse_4
      forceEndRoutineOnPress = any click
      saveMouseState = on click
      startVal [time (s)] = 0.0
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Flow
  Routine intro
  LoopInitiator Instruct_Loop loopType="TrialHandler"
    isTrials = False
    loopType = sequential
    nReps = 500
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    Routine Instruction2
  LoopTerminator Instruct_Loop
  LoopInitiator blocks loopType="TrialHandler"
    conditionsFile = spreadsheets/choose_digitSpan.xlsx
    isTrials = False
    loopType = sequential
    nReps = 5
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    conditions:
      [{'condition_file': 'three.xlsx', 'level': 3},
      {'condition_file': 'four.xlsx', 'level': 4},
      {'condition_file': 'five.xlsx', 'level': 5},
      {'condition_file': 'six.xlsx', 'level': 6},
      {'condition_file': 'seven.xlsx', 'level': 7},
      {'condition_file': 'eight.xlsx', 'level': 8},
      {'condition_file': 'nine.xlsx', 'level': 9},
      {'condition_file': 'ten.xlsx', 'level': 10},
      {'condition_file': 'eleven.xlsx', 'level': 11},
      {'condition_file': 'twelve.xlsx', 'level': 12}]
    Routine reset_correct
    LoopInitiator trials loopType="TrialHandler"
      conditionsFile = $'spreadsheets/'+condition_file
      loopType = sequential
      nReps = 1
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      LoopInitiator digitLoop loopType="TrialHandler"
        isTrials = False
        loopType = sequential
        nReps = digitSpan
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        Routine Digit_Presentation
      LoopTerminator digitLoop
      Routine Recall
      Routine Feedback
    LoopTerminator trials
  LoopTerminator blocks
  Routine End
